#############################################################
# I125_digitizer.mac - Inveon SPECT digitizer for I125
#
# @Date: 12/21/11 
# @Author: Sanghyeb Lee, Jens Gregor, Dustin Osborne
# @Reference: Sanghyeb Lee, Jens Gregor, Dustin Osborne, "Initial Validationof a Complete GATE MODEL of the Siemens Inveon Trimodal Imaging System", IEEE, Medical Imaging Conference, Anaheim, CA, Oct 2012
#
#############################################################

# D I G I T I Z E R
# To simulate the behavior of the scanner detectors and signal processing chain. GATE uses Geant4 to generate particles and transport through the different materials. Tnis mimics the physical interactions between particles and matter. The information generated during this process is used by GATE to simulate the detector pulses (digits)
####

#Adder sums up all the interaction with one photon within the same volume, and generates one pulse.
#Energy = sum of all energy deposited by one single photon
#Location = energy-weighted centroid
/gate/digitizer/Singles/insert adder
/gate/digitizer/Singles/insert readout
/gate/digitizer/Singles/readout/setDepth 2
/gate/digitizer/Singles/insert blurring
#energy blurring for I125
/gate/digitizer/Singles/blurring/setResolution 0.44 ##changed from 28 to 44
/gate/digitizer/Singles/blurring/setEnergyOfReference 27. keV
/gate/digitizer/Singles/insert spblurring
/gate/digitizer/Singles/spblurring/setSpresolution 0.8 mm
/gate/digitizer/Singles/spblurring/verbose 0
#energy thresholds for I125
/gate/digitizer/Singles/insert thresholder
/gate/digitizer/Singles/thresholder/setThreshold 25. keV  #25-45
/gate/digitizer/Singles/insert upholder
/gate/digitizer/Singles/upholder/setUphold 45. keV
